PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = SimpleExperiment
  Screen = 1
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Routines
  Routine image
    ImageComponent house
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      image = stimuli/house01.jpg
      size = (0.5, 0.5)
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    TextComponent HouseText
      text = This is the house.
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine readyTrial
    TextComponent readyMessage
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Это тестовый пример.
        Вам будет показан набор изображений.
        Нажмите любую клавишу, чтобы продолжить.
    KeyboardComponent Continue
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine readyTrial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine image
  LoopTerminator trials
